# 1 "D:/Bruker/ts12b15/exp/stan/nmr/lists/pp/hxcoqf"
;hxcoqf
;avance-version (00/04/28)
;2D heteronuclear shift correlation
;
;A. Bax & G.A. Morris, J. Magn. Reson. 42, 501 (1981)


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

"p2=p1*2"

"d0=3u"

"d2=1s/(cnst2*2)"

"d3=1s/(cnst2*cnst11)"

"d11=30m"

"d12=20u"


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define delay MCWRK
define delay MCREST
"MCWRK = d11"
"MCREST = d11 - d11"
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1 ze
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2 MCWRK 
LBLF1, MCREST
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3 d1 do:f2 
  d12 pl2:f2
  (p3 ph1):f2
  d0
  p2 ph3
  d0
  d2
  (p3 ph2):f2 (p1 ph4)
  d3 pl12:f2
  go=2 ph31 cpd2:f2
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  MCWRK  wr #0 if #0 zd id0 
  lo to LBLF1 times td1
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  d2 do:f2
exit


ph1=0
ph2=0 2 1 3
ph3=0 0 0 0 2 2 2 2
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1
    2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph31=0 2 1 3 0 2 1 3 1 3 2 0 1 3 2 0
     2 0 3 1 2 0 3 1 3 1 0 2 3 1 0 2


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d3 : 1/(3J(XH)) for all multiplicities
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst11: = 3 for all multiplicities
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;NS: 4 * n
;DS: 16
;td1: number of experiments
;FnMODE: QF
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;$Id: hxcoqf,v 1.3 2002/06/12 09:04:56 ber Exp $
